PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = animal_detection_txt1
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent text_2
      letterHeight = 0.5
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $WORD
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      correctAns = $ANS
      forceEndRoutine = True
      startVal [time (s)] = 1.2
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = animal_detection_txt1.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'WORD': 'cat', 'ANS': 'y'},
      {'WORD': 'dog', 'ANS': 'y'},
      {'WORD': 'panda', 'ANS': 'y'},
      {'WORD': 'table', 'ANS': 'n'},
      {'WORD': 'iphone', 'ANS': 'n'},
      {'WORD': 'bag', 'ANS': 'n'}]
    Routine trial
  LoopTerminator trials
